PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random() >0.5:
            direction = -level
            corr_resp= 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      fillColor = white
      size = 0.1,0.1
      shape = cross
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    GratingComponent grating
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      size = 0.3,0.3
      ori [set every repeat] = direction
      tex = sin
      mask = gauss
      phase = 0
      sf = 8
      contrast = 0.5
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    KeyboardComponent key_resp
      startVal [time (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'left','right'
      storeCorrect = True
      correctAns = $corr_resp
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Flow
  LoopInitiator stair loopType="StairHandler"
    nReps = 100
    start value = 10
    max value = 20
    min value = 1
    step sizes = [2,1,1,0.5]
    step type = lin
    N up = 1
    N down = 3
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    Routine trial
  LoopTerminator stair
